PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1600, 1000]
  expName = delay_discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press "T" for an immediate reward and press "L" for a delayed reward.

        Press "SPACEBAR" to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 53, 'future_reward': 65, 'delay': 101},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 82, 'future_reward': 90, 'delay': 175},
      {'reward_today': 92, 'future_reward': 110, 'delay': 190}]
    Routine trial
  LoopTerminator trials
