PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 1000]
  expName = motor_sequence_learning
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line_1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the key 'Z' when the triangle appears on the 1st rectangle.
        Press the key 'X' when the triangle appears on the 2nd rectangle.
        Press the key 'C' when the triangle appears on the 3rd rectangle.
        Press the key 'V' when the triangle appears on the 4th rectangle.

        Press 'SPACEBAR' to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence_conditions.csv
    loopType = sequential
    nReps = 25
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sequence_conditions.csv
    loopType = fullRandom
    nReps = 25
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials_2
