PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 1000]
  expName = solo_project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.3
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    PolygonComponent Left_rect
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (-0.168, 0)
      shape = rectangle
      size = (0.052, 0.35)
      startVal [time (s)] = 0
      stopVal [time (s)] = 3.3
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    PolygonComponent Right_rect
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.168, 0)
      shape = rectangle
      size = (0.052, 0.35)
      startVal [time (s)] = 0
      stopVal [time (s)] = 3.3
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    PolygonComponent cue
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos [set every repeat] = (cue_x, cue_y)
      shape = rectangle
      size = (0.052, 0.02)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      vertices = [(-0.85, 0.85), (0.85, 0.85)]
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    PolygonComponent target
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (target_x, target_y)
      shape = star7
      size = (0.03, 0.03)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 2
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You will be presented with two rectangles. On each trial you will see a fixation cross followed by a brief cue. After a short delay a small black star target may appear at one end of a rectangle. Press the "UP" arrow key when you see the black star.

        Important:
        On some trials no target will appear. If you do not see a target, do not press any key. Try to be as fast and accurate as possible

        We will start with a short practice block followed by the main experiment.
        Press "SPACEBAR" to start the practice block.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.3
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    PolygonComponent Left_rect_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (-0.168, 0)
      shape = rectangle
      size = (0.052, 0.35)
      startVal [time (s)] = 0
      stopVal [time (s)] = 3.3
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    PolygonComponent Right_rect_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.168, 0)
      shape = rectangle
      size = (0.052, 0.35)
      startVal [time (s)] = 0
      stopVal [time (s)] = 3.3
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    PolygonComponent cue_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos [set every repeat] = (cue_x, cue_y)
      shape = rectangle
      size = (0.052, 0.02)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      vertices = [(-0.85, 0.85), (0.85, 0.85)]
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    PolygonComponent target_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (target_x, target_y)
      shape = star7
      size = (0.03, 0.03)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_3
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 2
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  Routine instructions_2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have successfully completed the practice round.

        Press "SPACEBAR" to start the experiment whenever you are ready.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = practice_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'valid', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': -0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': -0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': 0.175, 'target_x': 0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': -0.175, 'target_x': 0.168, 'target_y': -0.149},
      {'condition': 'invalid_same', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': -0.168, 'target_y': -0.149},
      {'condition': 'invalid_same', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': -0.168, 'target_y': 0.149},
      {'condition': 'invalid_diff', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': 0.168, 'target_y': 0.149},
      {'condition': 'invalid_diff', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': 0.168, 'target_y': -0.149},
      {'condition': 'catch', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': None, 'target_y': None},
      {'condition': 'catch', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': None, 'target_y': None}]
    Routine practice
    Routine blank_2
  LoopTerminator trials_2
  Routine instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'condition': 'valid', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': -0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': -0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': 0.175, 'target_x': 0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': -0.175, 'target_x': 0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': -0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': -0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': 0.175, 'target_x': 0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': -0.175, 'target_x': 0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': -0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': -0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': 0.175, 'target_x': 0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': -0.175, 'target_x': 0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': 0.175, 'target_x': -0.168, 'target_y': 0.149},
      {'condition': 'valid', 'cue_x': -0.168, 'cue_y': -0.175, 'target_x': -0.168, 'target_y': -0.149},
      {'condition': 'valid', 'cue_x': 0.168, 'cue_y': 0.175, 'target_x': 0.168, 'target_y': 0.149}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
    Routine trial
    Routine blank
  LoopTerminator trials
